<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="500" y="64" z="1"/>
      <Steps>1000000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cell"/>
   </Plugin>
   
   <Plugin Name="Volume">

   </Plugin>
   
   <Plugin Name="CenterOfMass">
     
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="cell">10.0</Energy>
      <Energy Type1="cell" Type2="cell">10.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Chemotaxis">
      
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
      <!-- Specification of chemotaxis properties of select cell types. -->
      <ChemicalField Name="Attr">
      </ChemicalField>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Attr">
         <DiffusionData>
            <FieldName>Attr</FieldName>
            <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x/10.0</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <!-- <DiffusionCoefficient CellType="cell">0.0</DiffusionCoefficient> -->
            <!-- <DecayCoefficient CellType="cell">0.0</DecayCoefficient> -->
         </DiffusionData>
         
         <BoundaryConditions>
            <Plane Axis="X">
               <!--<ConstantValue PlanePosition="Min" Value="0.0"/>-->
               <!--<ConstantValue PlanePosition="Max" Value="50"/>-->
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="32" y="32" z="0"/>
         <Radius>3</Radius>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
